<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!--
        Gadgetron generic recon chain for 2D and 3D cartesian sampling

        Triggered by repetition
        Recon N is contrast and S is set

        Author: Hui Xue
        Magnetic Resonance Technology Program, National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- Noise prewhitening -->
    <gadget><name>NoiseAdjust</name><dll>gadgetron_mricore</dll><classname>NoiseAdjustGadget</classname></gadget>

    <!-- RO asymmetric echo handling -->
    <gadget><name>AsymmetricEcho</name><dll>gadgetron_mricore</dll><classname>AsymmetricEchoAdjustROGadget</classname></gadget>

    <!-- RO oversampling removal -->
    <gadget><name>RemoveROOversampling</name><dll>gadgetron_mricore</dll><classname>RemoveROOversamplingGadget</classname></gadget>

    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value></value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>phase</value></property>
        <property><name>S_dimension</name><value>average</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>

    <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <!-- <property><name>debug_folder</name><value>/tmp/</value></property> -->
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- averaging across repetition -->
        <property><name>average_all_ref_N</name><value>false</value></property>
        <!-- every set has its own kernels -->
        <property><name>average_all_ref_S</name><value>false</value></property>
        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>true</value></property>
    </gadget>

    <!-- Coil compression -->
    <gadget>
        <name>CoilCompression</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconEigenChannelGadget</classname>

        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>average_all_ref_N</name><value>true</value></property>
        <property><name>average_all_ref_S</name><value>true</value></property>

        <property><name>upstream_coil_compression</name><value>true</value></property>
        <property><name>upstream_coil_compression_thres</name><value>0.002</value></property>
        <property><name>upstream_coil_compression_num_modesKept</name><value>0</value></property>
    </gadget>

    <gadget>
      <name>SMSMatlabreconstruction</name>
      <dll>gadgetron_matlab</dll>
      <classname>MatlabBufferGadget</classname>
      <property><name>matlab_path</name><value>~/Documents/MATLAB/stan/Cartesian2D</value></property>
      <property><name>matlab_classname</name><value>GT_2DMB_TGRAPPA_leakage</value></property>
      <property><name>debug_mode</name><value>true</value></property>
      <property><name>pass_on_undesired_data</name><value>true</value></property>
    </gadget>

    <!-- Recon -->
     <gadget>
        <name>Recon</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianGrappaGadget</classname>
        
        <property><name>image_series</name><value>0</value></property>

        <property><name>coil_map_algorithm</name><value>Inati_Iter</value></property>

        <property><name>downstream_coil_compression</name><value>false</value></property>
        <property><name>downstream_coil_compression_thres</name><value>0.01</value></property>
        <property><name>downstream_coil_compression_num_modesKept</name><value>0</value></property>

        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <property><name>send_out_gfactor</name><value>false</value></property>
        <property><name>send_out_snr_map</name><value>false</value></property>
    </gadget>

       <!-- parameters for SPIRIT recon -->

        <!--    <gadget>
        <name>Recon</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianSpiritGadget</classname>

        <property><name>image_series</name><value>0</value></property>

        <property><name>coil_map_algorithm</name><value>Inati_Iter</value></property>

        <property><name>spirit_print_iter</name><value>true</value></property>
        <property><name>spirit_reg_lamda</name><value>0.02</value></property>
        <property><name>spirit_iter_max</name><value>50</value></property>
        <property><name>spirit_calib_over_determine_ratio</name><value>45</value></property>
        <property><name>spirit_iter_thres</name><value>0.0010</value></property>
        
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget> -->

    <!-- <gadget>
         <name>Recon</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianNonLinearSpirit2DTGadget</classname>

        <property><name>image_series</name><value>0</value></property>

        <property><name>coil_map_algorithm</name><value>Inati_Iter</value></property>

        <property><name>spirit_parallel_imaging_lamda</name><value>1.0</value></property>
        <property><name>spirit_data_fidelity_lamda</name><value>1.0</value></property>
        <property><name>spirit_image_reg_lamda</name><value>0.0010</value></property>
        <property><name>spirit_reg_name</name><value>db1</value></property>
        <property><name>spirit_reg_level</name><value>2</value></property>
        <property><name>spirit_reg_keep_approx_coeff</name><value>true</value></property>
        <property><name>spirit_reg_keep_redundant_dimension_coeff</name><value>true</value></property>
        <property><name>spirit_reg_proximity_across_cha</name><value>true</value></property>
        <property><name>spirit_reg_use_coil_sen_map</name><value>true</value></property>
        <property><name>spirit_reg_RO_weighting_ratio</name><value>2.5</value></property>
        <property><name>spirit_reg_E1_weighting_ratio</name><value>1.5</value></property>
        <property><name>spirit_reg_N_weighting_ratio</name><value>6.0</value></property>
        <property><name>spirit_print_iter</name><value>false</value></property>

        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
		
    </gadget> 
 -->
    <!-- Partial fourier handling -->
<!--     <gadget>
        <name>PartialFourierHandling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconPartialFourierHandlingFilterGadget</classname>

        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <property><name>partial_fourier_filter_RO_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_E1_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_E2_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_densityComp</name><value>false</value></property>
    </gadget> -->

      <gadget>
        <name>PartialFourierHandling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconPartialFourierHandlingPOCSGadget</classname>
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>true</value></property>

        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <property><name>partial_fourier_POCS_iters</name><value>6</value></property>
        <property><name>partial_fourier_POCS_thres</name><value>0.01</value></property>
        <property><name>partial_fourier_POCS_transitBand</name><value>16</value></property>
        <property><name>partial_fourier_POCS_transitBand_E2</name><value>16</value></property>
    </gadget>

    <!-- Kspace filtering -->
    <gadget>
        <name>KSpaceFilter</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconKSpaceFilteringGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- if incoming images have this meta field, it will not be processed -->
        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <!-- parameters for kspace filtering -->
        <property><name>filterRO</name><value>Gaussian</value></property>
        <property><name>filterRO_sigma</name><value>1.0</value></property>
        <property><name>filterRO_width</name><value>0.15</value></property>

        <property><name>filterE1</name><value>Gaussian</value></property>
        <property><name>filterE1_sigma</name><value>1.0</value></property>
        <property><name>filterE1_width</name><value>0.15</value></property>

        <property><name>filterE2</name><value>Gaussian</value></property>
        <property><name>filterE2_sigma</name><value>1.0</value></property>
        <property><name>filterE2_width</name><value>0.15</value></property>
    </gadget>

    <!-- FOV Adjustment -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>

    <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>1.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>10.0</value></property>
    </gadget>

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

   
		 
		<!-- Physio interpolation -->
        <!-- mode 0=seperate series for each complete RR -->
        <!-- 1=First complete RR interval only -->
                <!--interp_method "Spline" or "BSpline" 
    <gadget>
        <name>PhysioInterpolation</name>
        <dll>gadgetron_mricore</dll>
        <classname>PhysioInterpolationGadget</classname>

        <property>
            <name>phases</name>
            <value>30</value>
        </property>

     
        <property>
            <name>mode</name>
            <value>1</value>
        </property>

        <property>
            <name>first_beat_on_trigger</name>
            <value>true</value>
        </property>


        <property>
            <name>interp_method</name>
            <value>BSpline</value>
        </property>
    </gadget>-->

    <!-- after recon processing -->
	<gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>
	
	<!-- 9 for mag and phase -->
<!-- 	 <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
      <property><name>extract_mask</name><value>1</value></property> 
    </gadget> -->

  
	
	
    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>
<!-- 
        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property> -->
    </gadget> 

   
    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
